opentrons/protocol-designer 5.0.2
schemaVersion: 4
protocolName: Quick-RNA Magbead ZYMO
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_multi_gen2: {mount: left}
  p300_multi_gen2: {mount: right}
modules:
  magneticModuleV2: {slot: 1}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 300 µL: {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 10}
  samples_final: {definitionId: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/1, slot: 3}
  reagents_zymo: {definitionId: opentrons/nest_12_reservoir_15ml/1, slot: 4}
  samples_initial: {definitionId: opentrons/nest_96_wellplate_2ml_deep/1, slot: 2}
  samples_intermediate: {definitionId: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/1, slot: magneticModuleV2}
  Opentrons 96 Tip Rack 300 µL (1): {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 11}
  Opentrons 96 Tip Rack 300 µL (2): {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 7}
  Opentrons 96 Tip Rack 300 µL (3): {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 8}
  Opentrons 96 Tip Rack 300 µL (4): {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 5}
  Opentrons 96 Tip Rack 300 µL (5): {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 6}
  Opentrons 96 Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_tiprack_20ul/1, slot: 9}
pipetteTiprackAssignments:
  p20_multi_gen2: opentrons/opentrons_96_tiprack_20ul/1
  p300_multi_gen2: opentrons/opentrons_96_tiprack_300ul/1
ingredients:
  - dna_rna_shield: {description: 1x dna/rna shield from zymo}
  - rna_lysis_buffer: {description: runa lysis buffer from zymo}
  - ethanol: {description: pure (100%) ethanol from in-house}
  - magbinding_beads: {description: magbinding beads from zymo}
  - wash1: {description: mgbead dna/rna wash 1 from zymo}
  - wash2: {description: mgbead dna/rna wash2}
  - dnase1_reaction_mix: {description: DNAseI reaction mix from zymo}
  - dna_rna_prep_buffer: {description: DNA/RNA prep bufer from zymo}
  - dnase_rnase_free_water: {description: Ultrapure water from in-house}
ingredLocations:
  reagents_zymo:
    dna_rna_shield {volume: 15000}: A1
    rna_lysis_buffer {volume: 15000}: A2
    ethanol {volume: 15000}: A3, A4
    magbinding_beads {volume: 15000}: A5
    wash1 {volume: 15000}: A6, A7
    wash2 {volume: 15000}: A8, A9
    dnase1_reaction_mix {volume: 15000}: A10
    dna_rna_prep_buffer {volume: 15000}: A11
    dnase_rnase_free_water {volume: 15000}: A12
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 100
  path: single
  changeTip: once
  aspirate_labware: reagents_zymo
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: samples_initial
  dispense_wells: A1-A12
  dispense_mix_checkbox: true
  dispense_mix_times: 20
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: reagents_zymo
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: samples_initial
  dispense_wells: A1-A12
  dispense_mix_checkbox: true
  dispense_mix_times: 10
  dispense_mix_volume: 100
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: reagents_zymo
  aspirate_wells: A3
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  aspirate_mmFromBottom: 1
  dispense_labware: samples_initial
  dispense_wells: A1-A12
  dispense_mix_checkbox: true
  dispense_mix_times: 10
  dispense_mix_volume: 200
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: reagents_zymo
  aspirate_wells: A4
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  aspirate_mmFromBottom: 1
  dispense_labware: samples_initial
  dispense_wells: A1-A12
  dispense_mix_checkbox: true
  dispense_mix_times: 10
  dispense_mix_volume: 200
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 15
  path: single
  changeTip: once
  aspirate_labware: reagents_zymo
  aspirate_wells: A5
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 20
  aspirate_mix_volume: 10
  aspirate_mmFromBottom: 1
  dispense_labware: samples_initial
  dispense_wells: A1-A12
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 15
  dispense_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p300_multi_gen2
  volume: 200
  times: 10
  changeTip: never
  labware: samples_initial
  wells: A1-A12
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  mix_mmFromBottom: 0.5
- stepType: pause
  stepName: pause
  pauseAction: untilTime
  pauseMinute: 1
  pauseMessage: short pause between mixes. COPY STEP 6 AND 7 UNTIL 20 MINUTES IS REACHED.
- stepType: mix
  stepName: mix
  pipette: p300_multi_gen2
  volume: 200
  times: 10
  changeTip: never
  labware: samples_initial
  wells: A1-A12
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  mix_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: samples_initial
  aspirate_wells: A1-A12
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 5
  aspirate_mix_volume: 50
  aspirate_mmFromBottom: 1
  dispense_labware: samples_intermediate
  dispense_wells: A1-A12
  dispense_mmFromBottom: 0.5
- stepType: magnet
  stepName: magnet
  moduleId: magneticModuleV2
  magnetAction: engage
  engageHeight: 6
- stepType: pause
  stepName: pause
  pauseAction: untilTime
  pauseMinute: 5
  pauseMessage: BINDING BEADS TO MAGNET
- stepType: moveLiquid
  stepName: transfer
  stepDetails: REPEAT STEPS 9-12 4x UNTIL ALL VOLUME HAS BEEN ASPIRATED AND ALL BEADS HAVE BEEN BOUND.
  pipette: p300_multi_gen2
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: samples_intermediate
  aspirate_wells: A1-A12
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  aspirate_mmFromBottom: 1
  dispense_labware: Trash
  dispense_wells: A1
  dispense_mmFromBottom: 0.5
- stepType: magnet
  stepName: magnet
  moduleId: magneticModuleV2
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  magnetAction: disengage
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: reagents_zymo
  aspirate_wells: A6
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  aspirate_mmFromBottom: 1
  dispense_labware: samples_intermediate
  dispense_wells: A1-A12
  dispense_mix_checkbox: true
  dispense_mix_times: 20
  dispense_mix_volume: 50
  dispense_mmFromBottom: 0.5
- stepType: magnet
  stepName: magnet
  moduleId: magneticModuleV2
  magnetAction: engage
  engageHeight: 6
- stepType: pause
  stepName: pause
  pauseAction: untilTime
  pauseMinute: 5
  pauseMessage: WASH1 MAGNET PAUSE
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 100
  path: single
  changeTip: never
  aspirate_labware: samples_intermediate
  aspirate_wells: A1-A12
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  aspirate_mmFromBottom: 1
  dispense_labware: Trash
  dispense_wells: A1
  dispense_mmFromBottom: 0.5
- stepType: pause
  stepName: pause
  pauseAction: untilResume
  pauseMessage: DELETE THIS STEP. THIS IS TO REMIND YOU THAT YOU NEED TO COPY THE WASH1 SEQUENCE FOR WASH2 AND ETHANOL. REPEAT STEPS 13-17. ALSO SKIPPING DNASE STEP FOR NOW, MAKE SURE TO ADD IT PROGRAMMATICALLY.
- stepType: pause
  stepName: pause
  pauseAction: untilTime
  pauseMinute: 10
  pauseMessage: DRYING THE BEADS. KEEPING MAGNET ENGAGED.
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 25
  path: single
  changeTip: never
  aspirate_labware: reagents_zymo
  aspirate_wells: A12
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  aspirate_mmFromBottom: 1
  dispense_labware: samples_intermediate
  dispense_wells: A1-A12
  dispense_mmFromBottom: 0.5
- stepType: magnet
  stepName: magnet
  moduleId: magneticModuleV2
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  magnetAction: disengage
- stepType: mix
  stepName: mix
  pipette: p20_multi_gen2
  volume: 12.5
  times: 100
  changeTip: never
  labware: samples_intermediate
  wells: A1-A12
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  mix_mmFromBottom: 0.5
- stepType: magnet
  stepName: magnet
  moduleId: magneticModuleV2
  magnetAction: engage
  engageHeight: 6
- stepType: pause
  stepName: pause
  pauseAction: untilTime
  pauseMinute: 5
  pauseMessage: FINAL BIND.
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 25
  path: single
  changeTip: always
  aspirate_labware: samples_intermediate
  aspirate_wells: A1-A12
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  aspirate_mmFromBottom: 1
  dispense_labware: samples_final
  dispense_wells: A1-A12
  dispense_mmFromBottom: 0.5
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p300_multi_gen2, labware: Opentrons 96 Tip Rack 300 µL (4), well: A1}
- aspirate: {pipette: p300_multi_gen2, volume: 100, labware: reagents_zymo, well: A1, offsetFromBottomMm: 1, flowRate: 94}
- dispense: {pipette: p300_multi_gen2, volume: 100, labware: samples_initial, well: A1, offsetFromBottomMm: 0.5, flowRate: 94}
- aspirate: {pipette: p300_multi_gen2, volume: 50, labware: samples_initial, well: A1, offsetFromBottomMm: 0.5, flowRate: 94}
- dispense: {pipette: p300_multi_gen2, volume: 50, labware: samples_initial, well: A1, offsetFromBottomMm: 0.5, flowRate: 94}
- aspirate: {pipette: p300_multi_gen2, volume: 50, labware: samples_initial, well: A1, offsetFromBottomMm: 0.5, flowRate: 94}
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